PsychoPy2experiment version="2026.1.3"
Settings
  expName = orientation_discrimination
  Audio lib = ptb
  runMode = 1
  Experiment info = {"participant":"f\"{randint(0, 999999):06.0f}\"","session":"001"}
  Monitor = testMonitor
  Screen = 1
  Full-screen window = True
  Window size (pixels) = (1024, 768)
  Units = height
  colPriority = {"thisRow.t":"priority.CRITICAL","expName":"priority.LOW"}
  keyboardBackend = PsychToolbox
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Routines
  Routine trial
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    PolygonComponent fixation
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      fillColor = white
      size = (20, 20)
      units = pix
      shape = cross
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    GratingComponent grating
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.3
      size = (0.2, 0.2)
      ori [set every repeat] = tilt
      tex [set every repeat] = sin
      mask [set every repeat] = gauss
      sf = 5
      saveStartStop = False
      contrast = 0.3
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    KeyboardComponent key_resp
      startVal [time (s)] = 1.0
      forceEndRoutine = True
      allowedKeys = 'up', 'down'
      storeCorrect = True
      correctAns = $corrAns
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        if random() > 0.5:
            tilt = 0;
            corrAns = 'up'

        else:
            if random() > 0.5:
                tilt = randint(1,5)
                corrAns = 'down'
            else:
                tilt = randint(-5,-1)
                corrAns = 'down'
      End Routine:
        trials.addData('tilt',tilt)

        if random() > 0.5:
            tilt = 0;
            corrAns = 'up'

        else:
            if random() > 0.5:
                tilt = randint(1,5)
                corrAns = 'down'
            else:
                tilt = randint(-5,-1)
                corrAns = 'down'
Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 100
    endPoints = [0,1]
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    Routine trial
  LoopTerminator trials
